PsychoPy2experiment version="3.2.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test_fmri
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Routines
  Routine trial
    ImageComponent image
      image = joan.png
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trigger
    TextComponent textTrigger
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = waiting for the scanner
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    KeyboardComponent getTrigger
      allowedKeys = 'equal'
      durationEstim = 5.0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent recordTrigger
      Code Type = Py
  Routine ravioli
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine audio_recording
    ImageComponent image_2
      image = plane.png
      size = (1.65, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Trigger
  Routine trial
  Routine ravioli
  Routine audio_recording
